PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = norm
  Use version = 2020.2
  Window size (pixels) = [1280, 720]
  color = gray
  expName = cui_stroop
  logging level = warning
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Routines
  Routine trial
    PolygonComponent word_rect
      fillColor = $[0.5,0.5,0.5]
      lineColor = $[0.5,0.5,0.5]
      shape = rectangle
      size = (1, .4)
      startEstim = 0
      startVal [frame N] = 0
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    PolygonComponent background
      durationEstim = .032
      fillColor [set every repeat] = $str(bgColor)
      lineColor [set every repeat] = $str(bgColor)
      shape = rectangle
      size = (2,2)
      startEstim = 1
      startVal [frame N] = 60
      stopVal [frame N] = 62
      units = norm
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    TextComponent word
      color = black
      durationEstim = .032
      letterHeight = .4
      startEstim = 1.064
      startVal [frame N] = 62
      stopVal [frame N] = 64
      text [set every repeat] = $str(text)
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    KeyboardComponent resp
      allowedKeys = 'left', 'down', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startEstim = 1.064
      startVal [frame N] = 64
      storeCorrect = True
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    TextComponent mask
      color = black
      letterHeight = .4
      startEstim = 1.096
      startVal [frame N] = 64
      text = XXXXX
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = .1
      startVal [time (s)] = 0
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      text:
        OK. Ready for the real thing?

        Remember, please respond to the WORD, not to the background colour.
        Press:

        LEFT for RED
        DOWN for GREEN
        RIGHT for BLUE
        (ESC will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instructPractice
    TextComponent instr1
      letterHeight = .06
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text [set every repeat]:
        Welcome to the Stroop task!

        In every trial of this task, you will see a colour word appear very quickly (RED, GREEN, BLUE), followed by a mask (XXXXX). Your task is to indicate which word appeared *as quickly as you can*. The text will always be in black. The background colour of the screen will change briefly before the word appears. Sometimes the background colour will be the same as the word (e.g., the word "RED" against a red background), and sometimes it will be different (e.g., the word "RED" against a blue background). Do NOT make your response based on the background colour. Please respond only to the word that was shown.

        Press:
        LEFT arrow key for the word RED
        DOWN arrow key for the word GREEN
        RIGHT arrow key for the word BLUE
        (ESC will quit)

        Let's start with a few practice trials. The practice trials will show you a reminder of which button to press for each colour. They will also show you feedback on your accuracy. Trials in the main experiment will not provide button reminders or feedback.

        Press the SPACEBAR to continue.
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = .1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
  Routine feedback
    CodeComponent message
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct!"
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      letterHeight = .2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg
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    TextComponent reminder
      letterHeight = .1
      pos = (0, -.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        LEFT for RED
        DOWN for GREEN
        RIGHT for BLUE
  Routine instr_block
    TextComponent block_instr
      letterHeight = .1
      startVal [time (s)] = 0.0
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      text:
        You are about to start block:





        out of 4. If you need to take a short break, please do so now.

        Press any key to begin.
    TextComponent block_nr
      letterHeight = .2
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(block)
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    KeyboardComponent ready_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = trialTypes.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('text', 'RED'), ('bgColor', 'RED'), ('corrAns', 'left'), ('congruent', 'cong')]),
      OrderedDict([('text', 'RED'), ('bgColor', 'RED'), ('corrAns', 'left'), ('congruent', 'cong')]),
      OrderedDict([('text', 'RED'), ('bgColor', 'GREEN'), ('corrAns', 'left'), ('congruent', 'incong')]),
      OrderedDict([('text', 'RED'), ('bgColor', 'BLUE'), ('corrAns', 'left'), ('congruent', 'incong')]),
      OrderedDict([('text', 'GREEN'), ('bgColor', 'RED'), ('corrAns', 'down'), ('congruent', 'incong')]),
      OrderedDict([('text', 'GREEN'), ('bgColor', 'GREEN'), ('corrAns', 'down'), ('congruent', 'cong')]),
      OrderedDict([('text', 'GREEN'), ('bgColor', 'GREEN'), ('corrAns', 'down'), ('congruent', 'cong')]),
      OrderedDict([('text', 'GREEN'), ('bgColor', 'BLUE'), ('corrAns', 'down'), ('congruent', 'incong')]),
      OrderedDict([('text', 'BLUE'), ('bgColor', 'RED'), ('corrAns', 'right'), ('congruent', 'incong')]),
      OrderedDict([('text', 'BLUE'), ('bgColor', 'GREEN'), ('corrAns', 'right'), ('congruent', 'incong')]),
      OrderedDict([('text', 'BLUE'), ('bgColor', 'BLUE'), ('corrAns', 'right'), ('congruent', 'cong')]),
      OrderedDict([('text', 'BLUE'), ('bgColor', 'BLUE'), ('corrAns', 'right'), ('congruent', 'cong')])]
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blockNrs.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 1)]),
      OrderedDict([('block', 2)]),
      OrderedDict([('block', 3)]),
      OrderedDict([('block', 4)])]
    Routine instr_block
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trialTypes.csv
      endPoints = [1, 2]
      loopType = random
      nReps = 4
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      conditions:
        [OrderedDict([('text', 'RED'), ('bgColor', 'RED'), ('corrAns', 'left'), ('congruent', 'cong')]),
        OrderedDict([('text', 'RED'), ('bgColor', 'RED'), ('corrAns', 'left'), ('congruent', 'cong')]),
        OrderedDict([('text', 'RED'), ('bgColor', 'GREEN'), ('corrAns', 'left'), ('congruent', 'incong')]),
        OrderedDict([('text', 'RED'), ('bgColor', 'BLUE'), ('corrAns', 'left'), ('congruent', 'incong')]),
        OrderedDict([('text', 'GREEN'), ('bgColor', 'RED'), ('corrAns', 'down'), ('congruent', 'incong')]),
        OrderedDict([('text', 'GREEN'), ('bgColor', 'GREEN'), ('corrAns', 'down'), ('congruent', 'cong')]),
        OrderedDict([('text', 'GREEN'), ('bgColor', 'GREEN'), ('corrAns', 'down'), ('congruent', 'cong')]),
        OrderedDict([('text', 'GREEN'), ('bgColor', 'BLUE'), ('corrAns', 'down'), ('congruent', 'incong')]),
        OrderedDict([('text', 'BLUE'), ('bgColor', 'RED'), ('corrAns', 'right'), ('congruent', 'incong')]),
        OrderedDict([('text', 'BLUE'), ('bgColor', 'GREEN'), ('corrAns', 'right'), ('congruent', 'incong')]),
        OrderedDict([('text', 'BLUE'), ('bgColor', 'BLUE'), ('corrAns', 'right'), ('congruent', 'cong')]),
        OrderedDict([('text', 'BLUE'), ('bgColor', 'BLUE'), ('corrAns', 'right'), ('congruent', 'cong')])]
      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine thanks
